<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>ResetQuadratureCounter</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Bonsai.Harp:CommandSubject.bonsai">
        <Name>Command</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:Device">
          <harp:PortName>COM6</harp:PortName>
          <harp:DeviceState>Active</harp:DeviceState>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:LedState>On</harp:LedState>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disable</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>RegisterAnalogInput</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Value</Selector>
      </Expression>
      <Expression xsi:type="p1:BehaviorEvent">
        <p1:Type>QuadratureCounter</p1:Type>
        <p1:Mask>Port2</p1:Mask>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>MouseDistance</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Skip">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Buffer">
                <rx:Count>2</rx:Count>
                <rx:Skip>1</rx:Skip>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
(it[0]&gt;32000 &amp;&amp; it[1]&lt;-32000)? (65536+it[1]-it[0]) : (it[0]&lt;-32000 &amp;&amp; it[1]&gt;32000)? (65536-it[1]+it[0]) : (it[1] - it[0]) as subtract
) </scr:Expression>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>subtract</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>