<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>InitBonvision3D</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:MeshResources">
                <gl:Meshes>
                  <gl:MeshConfiguration xsi:type="gl:TexturedModel">
                    <gl:Name>sphere</gl:Name>
                    <gl:FileName>E:\vis-stim\vis-stim-depth\Spheres\Objects\sphere.obj</gl:FileName>
                  </gl:MeshConfiguration>
                </gl:Meshes>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="wie:MouseMove" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Y</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Rescale">
                <dsp:Min>0</dsp:Min>
                <dsp:Max>2000</dsp:Max>
                <dsp:RangeMin>0</dsp:RangeMin>
                <dsp:RangeMax>10</dsp:RangeMax>
                <dsp:RescaleType>Linear</dsp:RescaleType>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:LatestOnUpdateFrame" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>Rename1</scr:Name>
              <scr:Expression>new(
0 as X,
0 as Y,
it as EyeZ)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Eye" Selector="X,Y,EyeZ" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
              <Eye>
                <X>0</X>
                <Y>0</Y>
                <Z>2.215</Z>
              </Eye>
              <NearClip>0.1</NearClip>
              <FarClip>1000</FarClip>
              <Light>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Light>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderCubemap">
                <gl:RenderState />
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:FaceSize xsi:nil="true" />
                <gl:InternalFormat>Rgb</gl:InternalFormat>
                <gl:MinFilter>Linear</gl:MinFilter>
                <gl:MagFilter>Linear</gl:MagFilter>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
              <Width>20</Width>
              <Height>15</Height>
              <Rotation>
                <X>0</X>
                <Y>0</Y>
                <Z>0</Z>
              </Rotation>
              <Translation>
                <X>0</X>
                <Y>0</Y>
                <Z>10</Z>
              </Translation>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.DrawViewport.bonsai">
              <X>0</X>
              <Y>0</Y>
              <Width>1</Width>
              <Height>1</Height>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="13" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DrawSpheres</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>-45</RangeMin>
              <RangeMax>45</RangeMax>
              <Count>10</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:VariationWithRepetition">
                <num:Count>1</num:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>45</RangeMin>
              <RangeMax>135</RangeMax>
              <Count>10</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:DegreeToRadian" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:VariationWithRepetition">
                <num:Count>1</num:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>10</RangeMin>
              <RangeMax>1</RangeMax>
              <Count>2</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:VariationWithRepetition">
                <num:Count>1</num:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.ParameterRange.bonsai">
              <RangeMin>0.05</RangeMin>
              <RangeMax>0.05</RangeMax>
              <Count>2</Count>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:VariationWithRepetition">
                <num:Count>1</num:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Timer">
                <gl:DueTime>PT0.5S</gl:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Repeat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Xdeg</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Ydeg</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Zradius</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item4</Selector>
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>Size</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Xdeg</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Ydeg</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Zradius</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Size</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>MouseZ</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SphericalTransform" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="CreateObservable">
              <Name>CreateSpheres</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>144</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:CreateAmbientArray" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                      <gl:Period>PT0.0069444S</gl:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>Params</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT4S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(
Item1 as Draw,
Item2.Item1.Index as Id,
Item2.Item1.Value.Item1.Item1 as Azimuth,
Item2.Item1.Value.Item1.Item2 as Elevation,
Item2.Item1.Value.Item1.Item3 as Radius,
Item2.Item1.Value.Item2.Item1 as X,
Item2.Item1.Value.Item2.Item2 as Y,
Item2.Item1.Value.Item2.Item3 as Z,
Item2.Item1.Value.Item3.Item1 as Z0,
Item2.Item1.Value.Item3.Item2 as Size,
Item2.Item2.Item1 as Ambient,
Item2.Item2.Item2 as AmbientTimer
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="TranslationX" Selector="X" />
                      <Property Name="TranslationY" Selector="Y" />
                      <Property Name="TranslationZ" Selector="Z" />
                      <Property Name="Ambient" Selector="Ambient" />
                      <Property Name="ScaleX" Selector="Size" />
                      <Property Name="ScaleY" Selector="Size" />
                      <Property Name="ScaleZ" Selector="Size" />
                    </PropertyMappings>
                    <Selector>Draw</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawModel.bonsai">
                    <TranslationX>-0.07898993</TranslationX>
                    <TranslationY>0.42261827</TranslationY>
                    <TranslationZ>3.11785913</TranslationZ>
                    <ScaleX>0.05</ScaleX>
                    <ScaleY>0.05</ScaleY>
                    <ScaleZ>0.05</ScaleZ>
                    <MeshName>sphere</MeshName>
                    <Ambient>
                      <X>0.436619729</X>
                      <Y>0.436619729</Y>
                      <Z>0.436619729</Z>
                    </Ambient>
                    <Diffuse>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Diffuse>
                    <Specular>
                      <X>0</X>
                      <Y>0</Y>
                      <Z>0</Z>
                    </Specular>
                    <SpecularExponent>10</SpecularExponent>
                    <RotationZ>0</RotationZ>
                    <RotationY>0</RotationY>
                    <RotationX>0</RotationX>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="5" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="10" Label="Source2" />
                  <Edge From="8" To="14" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DelaySubscription">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="11" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="11" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="11" Label="Source4" />
            <Edge From="10" To="11" Label="Source5" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="15" Label="Source1" />
            <Edge From="12" To="17" Label="Source1" />
            <Edge From="12" To="19" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="21" To="25" Label="Source1" />
            <Edge From="22" To="25" Label="Source2" />
            <Edge From="23" To="25" Label="Source3" />
            <Edge From="24" To="25" Label="Source4" />
            <Edge From="25" To="27" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>DataLogger</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="BehaviorSubject" TypeArguments="sys:Tuple(rx:ElementIndex(sys:Tuple(sys:Tuple(sys:Double,sys:Double,sys:Double),sys:Tuple(sys:Double,sys:Double,sys:Double),sys:Tuple(sys:Double,sys:Double))),sys:Tuple(sys:Single,sys:Int64))">
              <Name>Params</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>new(
Item2 as FrameTime,
Item1.Item1.Index as Id,
Item1.Item1.Value.Item1.Item1 as Azimuth,
Item1.Item1.Value.Item1.Item2 as Elevation,
Item1.Item1.Value.Item1.Item3 as Radius,
Item1.Item1.Value.Item2.Item1 as X,
Item1.Item1.Value.Item2.Item2 as Y,
Item1.Item1.Value.Item2.Item3 as Z,
Item1.Item1.Value.Item3.Item1 as Z0,
Item1.Item1.Value.Item3.Item2 as Size,
Item1.Item2.Item1 as Ambient,
Item1.Item2.Item2 as AmbientTimer
)</scr:Expression>
            </Expression>
            <Expression xsi:type="io:CsvWriter">
              <io:FileName>saved_csv\AllParams.csv</io:FileName>
              <io:Append>false</io:Append>
              <io:Overwrite>false</io:Overwrite>
              <io:Suffix>Timestamp</io:Suffix>
              <io:IncludeHeader>true</io:IncludeHeader>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>